PsychoPy2experiment version="3.0.0b12"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = Form
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Routines
  Routine demog
    FormComponent demographics
      Data Format = rows
      Item Padding = 0.06
      Items = demographics.csv
      Pos = (0, 0)
      Randomize = False
      Size = (1, 0.7)
      Text Height = 0.02
      startVal [time (s)] = 0.0
    TextComponent demogText
      letterHeight = 0.05
      pos = (0, .4)
      startVal [time (s)] = 0.0
      text = Please answer the following questions:
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        continueButton = visual.ButtonStim(win, labelText= "Continue", pos=(.35, -.4))
      Each Frame:
        continueButton.draw()

        if demographics.formComplete():
            continueButton.buttonEnabled = True

        if continueButton.buttonSelected:
            continueRoutine = False
  Routine Main
    FormComponent BFI
      Data Format = rows
      Item Padding = 0.05
      Items = BigFiveItems.csv
      Pos = (0, 0)
      Randomize = False
      Size = (1, 0.7)
      Text Height = 0.02
      startVal [time (s)] = 0.0
    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        continueButton = visual.ButtonStim(win, labelText= "Continue", pos=(.35, -.4))
      Each Frame:
        continueButton.draw()

        if BFI.formComplete():
            continueButton.buttonEnabled = True

        if continueButton.buttonSelected:
            continueRoutine = False
    TextComponent text
      letterHeight = 0.02
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
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      text:
        Here are a number of characteristics that may or may not apply to you. For example, do you agree
        that you are someone who likes to spend time with others? Please select the appropriate rating next to each
        statement to indicate the extent to which you agree or disagree with that statement.
Flow
  Routine demog
  Routine Main
