PsychoPy2experiment version="2022.1.0rc1"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = BFI
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Routines
  Routine demographics
    FormComponent demog
      Data Format = rows
      Font = Open Sans
      Item Padding = 0.05
      Items = demographics.xlsx
      Randomize = False
      Style = custom...
      Text Height = 0.025
      itemColor = white
      markerColor = red
      responseColor = white
      size = (1, 0.8)
      startVal [time (s)] = 0.0
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    ButtonComponent contBtn1
      bold = True
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (0.95, -0.95)
      size = (0.15, 0.1)
      startVal [condition] = demog.complete
      text = Continue
      units = norm
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  Routine TIPI
    FormComponent TIPIForm
      Data Format = rows
      Font = Open Sans
      Item Padding = 0.05
      Items = TIPI.xlsx
      Randomize = False
      Style = custom...
      Text Height = 0.025
      itemColor = white
      markerColor = red
      pos = (0, -0)
      responseColor = white
      size = (1, 0.8)
      startVal [time (s)] = 0.0
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    ButtonComponent contBtn2
      bold = True
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (0.95, -0.95)
      size = (0.15, 0.1)
      startVal [condition] = TIPIForm.complete
      text = Continue
      units = norm
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Flow
  Routine demographics
  Routine TIPI
