PsychoPy2experiment version="1.50.04"
Settings
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'s_001', 'session':001}
  logging level = warning
  Units = norm
  Screen = 1
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Routines
  Routine trial
    TextComponent word
      text [set every repeat] = thisTrial.text
      colour [set every repeat] = thisTrial.rgb
      duration = 1.5
      letterHeight = 0.2
      startTime = 0.5
      colourSpace = rgb
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    KeyboardComponent resp
      storeCorrect = True
      forceEndTrial = True
      correctAns = thisTrial.corrAns
      storeResponseTime = True
      startTime = 0.5
      allowedKeys = ['1','2','3']
      duration = 1.5
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  Routine instruct
    TextComponent instrText
      colour = [1, 1, 1]
      letterHeight = 0.1
      startTime = 0
      colourSpace = rgb
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      text:
        "Please press;
        1 for red ink,
        2 for green ink
        3 for blue ink
        (Esc will quit)

        Any key to continue"
    KeyboardComponent ready
      forceEndTrial = True
      correctAns = thisTrial.corrAns
      storeResponseTime = False
      startTime = 0
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  Routine thanks
    TextComponent thanksText
      text = "Thanks!"
      colour = [1, 1, 1]
      duration = 1.0
      letterHeight = 0.2
      startTime = 1.0
      colourSpace = rgb
      font = arial
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Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
    trialList = [{'text': 'red', 'rgb': [1, -1, -1], 'congruent': 1, 'corrAns': 1}, {'text': 'red', 'rgb': [-1, 1, -1], 'congruent': 0, 'corrAns': 1}, {'text': 'green', 'rgb': [-1, 1, -1], 'congruent': 1, 'corrAns': 2}, {'text': 'green', 'rgb': [-1, -1, 1], 'congruent': 0, 'corrAns': 2}, {'text': 'blue', 'rgb': [-1, -1, 1], 'congruent': 1, 'corrAns': 3}, {'text': 'blue', 'rgb': [1, -1, -1], 'congruent': 0, 'corrAns': 3}]
    trialListFile = /Users/jwp...troop/trialTypes.csv
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    Routine trial
  LoopTerminator trials
  Routine thanks
